PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = test
  Screen = 1
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Routines
  Routine trial
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 4.0
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','9'
      startVal [time (s)] = 2.0
      store = all keys
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    ImageComponent image
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      image = '/Users/gracer/Documents/bevbit_task/sweet.jpg'
      size = (0.5, 0.5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
